CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"FileLocation": "text", "Series": "text", "Frame": "text", "plane": "text", "ChannelNumber": "text", "Exp": "text", "Date": "text", "frame": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Date>.*)_s(?P<Exp>[0-9]{1,2})_ch(?P<ChannelNumber>[0-9])_t(?P<frame>[0-9]{1,2})_z(?P<plane>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'BF_i': u'frame', u'FL_i': u'frame'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:BF_i
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch0")
    Name to assign these images:FL_i
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:BF_i
    Name the output image:BF
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:65,end
    Top and bottom rectangle positions:0,end
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    Remove empty rows and columns?:No
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
Crop:[module_num:6|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
    Select the input image:FL_i
    Name the output image:FL
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:65,end
    Top and bottom rectangle positions:0,end
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    Remove empty rows and columns?:No
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
Smooth:[module_num:7|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
    Select the input image:FL
    Name the output image:FL_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
ApplyThreshold:[module_num:8|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
    Select the input image:FL_Smooth
    Name the output image:FL_Thres
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RescaleIntensity:[module_num:9|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
    Select the input image:FL_Thres
    Name the output image:FLRescal
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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
    Select the input image:BF
    Name the output image:BFRescal
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:0.5
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    Intensity range for the output image:0.0,1
    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to custom value
    Custom value for pixels above upper limit:0.5
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
ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.2
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:LineImage
    Image or measurement?:Image
    Select the first image:BFRescal
    Multiply the first image by:2
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    Image or measurement?:Image
    Select the second image:FLRescal
    Multiply the second image by:1
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
EnhanceEdges:[module_num:12|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enabled:False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
    Select the input image:LineImage
    Name the output image:EdgedImage
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    Select an edge-finding method:Prewitt
    Select edge direction to enhance:All
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
EnhanceOrSuppressFeatures:[module_num:13|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enabled:False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
    Select the input image:HoleImage
    Name the output image:CentreImage
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:5,20
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
ImageMath:[module_num:14|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.15
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:LineImage
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:FLRescal
    Multiply the second image by:1
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
Smooth:[module_num:15|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
    Select the input image:ImageAfterMath
    Name the output image:ImageAFterMathSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:8
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
ApplyThreshold:[module_num:16|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enabled:False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
    Select the input image:FLRescal
    Name the output image:FL_Centre
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
IdentifyPrimaryObjects:[module_num:17|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notes:[u'Identify the nuclei from the histone stain image. Three-class thresholding works better than the default two-class method.']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
    Select the input image:ImageAFterMathSmooth
    Name the primary objects to be identified:cell
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:CellOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
TrackObjects:[module_num:18|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
    Choose a tracking method:LAP
    Select the objects to track:cell
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the motion model:Both
    Number of standard deviations for search radius:100
    Search radius limit, in pixel units (Min,Max):10,100
    Run the second phase of the LAP algorithm?:Yes
    Gap cost:10
    Split alternative cost:50
    Merge alternative cost:50
    Maximum gap displacement, in frames:100
    Maximum split score:5
    Maximum merge score:5
    Maximum gap:4
    Filter objects by lifetime?:No
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
MeasureObjectSizeShape:[module_num:19|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notes:[u'Measure the morphology of each nucleus.']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
    Select objects to measure:cell
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:20|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notes:[u'Overlay the nucleus outlines on the grayscale image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BFRescal
    Name the output image:OutlineBF
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:CellOutlines
    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:cell

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:FLRescal
    Name the output image:OutlineFL
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:cell

Tile:[module_num:22|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notes:[u'Tile the original color image, the outlined image and the image of tracked labels together.']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
    Select an input image:BFRescal
    Name the output image:AdjacentImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:Yes
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OutlineBF
    Select an additional image to tile:OutlineFL
    Select an additional image to tile:CellOutlines

SaveImages:[module_num:23|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notes:[u"Save the tiled image as an PNG, naming each image according to 'Specimen' and 'Frame' metadata of the original image. Save the image in a new sub-folder created and named according to the 'Run' metadata."]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
    Select the type of image to save:Image
    Select the image to save:AdjacentImage
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:AdjacentImage
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder|Documents\\\\\\\\Cell_analysis\\\\\\\\Onion_images\\\\\\\\Output
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Movie
    Select the image to save:TrackedCells
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    Select method for constructing file names:Single name
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    Enter single file name:Tracking
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Saved movie format:avi

ExportToSpreadsheet:[module_num:25|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notes:[u'Export any measurements to a comma-delimited file (.csv). The measurements made for the nucleus objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents\\\\\\\\Cell_analysis\\\\\\\\Onion_images\\\\\\\\Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
