CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Zlevel": "integer", "FileLocation": "text", "Series": "text", "Frame": "text", "FrameNumber": "text", "Date": "text", "Channel": "text", "Seri": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Date>.*)_s(?P<Seri>[0-9]{1,2})_ch(?P<Channel>[0-9])_t(?P<FrameNumber>[0-9]{1,2})_z(?P<Zlevel>[0-9]{1,2})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "_s13_")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'FL_sum': u'Zlevel', u'BF_sum': u'Zlevel', u'BF_B': u'Zlevel', u'FL': u'Zlevel', u'BF_D': u'Zlevel'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:2
    Select the rule criteria:or (file does contain "ch0_t20")
    Name to assign these images:FL
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "ch1_t20")
    Name to assign these images:BF_B
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch1_t20")
    Name to assign these images:BF_D
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/user/Documents/Cell_analysis/mask/experiment_050714/Sgementation_Test3/050714_s13_ch0_t20_sum.tif   
    Name to assign this image:FL_sum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/user/Documents/Cell_analysis/mask/experiment_050714/Segmentation_Test/AVG_BF1_39.tif   
    Name to assign this image:BF_sum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:FL_sum
    Name the output image:FL_sum_Rescal
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:6|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
    Select the input image:FL_sum_Rescal
    Name the output image:FL_sum_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ImageMath:[module_num:7|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
    Operation:Absolute Difference
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.09
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Diff_FL_BF
    Image or measurement?:Image
    Select the first image:FL_sum_Rescal
    Multiply the first image by:1.5
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    Image or measurement?:Image
    Select the second image:BF_sum
    Multiply the second image by:1.0
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
ApplyThreshold:[module_num:8|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
    Select the input image:Diff_FL_BF
    Name the output image:Diff_FL_BF_threshold
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Smooth:[module_num:9|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
    Select the input image:Diff_FL_BF_threshold
    Name the output image:Diff_FL_BF_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:Diff_FL_BF_smooth
    Name the output image:Holes
    Select the operation:Enhance
    Feature size:30
    Feature type:Dark holes
    Range of hole sizes:5,10
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
RescaleIntensity:[module_num:11|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
    Select the input image:Holes
    Name the output image:HolesRescale
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.012,1.0
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:HolesRescale
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ImageMath:[module_num:13|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Overlap
    Image or measurement?:Image
    Select the first image:BF_sum
    Multiply the first image by:0.5
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    Image or measurement?:Image
    Select the second image:FL_sum_smooth
    Multiply the second image by:5
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Overlap
    Select the method to identify the secondary objects:Propagation
    Select the input image:Overlap
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    Regularization factor:0.01
    Name the outline image:SecondaryOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Name the new primary object outlines:NucleiFilteredOutlines
    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Overlap
    Name the output image:OutlineOverlap
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells_Overlap
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:FL_sum_smooth
    Name the output image:OutlineFL_sum
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells_Overlap
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BF_sum
    Name the output image:Outline_BF_sum
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells_Overlap
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

Tile:[module_num:18|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
    Select an input image:Outline_BF_sum
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:Yes
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OutlineFL_sum
    Select an additional image to tile:OutlineOverlap

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tile
    Number of digits:3
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Overlap
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    Select method for constructing file names:Sequential numbers
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    Enter single file name:Overlap
    Number of digits:3
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:21|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
    Select objects to measure:Cell
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:22|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
    Hidden:1
    Select an image to measure:ImageAfterMath
    Select objects to measure:Cell

ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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